CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:406
GitHash:
ModuleCount:66
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:655090_(?P<Well>[A-P][0-9]{1,2})_(?P<Timepoint>[A-z][0-9]{1,4})(?P<FoV>[A-z][0-9]{1,4})(?P<TimeLine>[A-z][0-9]{1,2})(?P<ActionList>[A-z][0-9]{1,2})(?P<Zpos>[A-z][0-9]{1,2})(?P<Channel>[A-z][0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C01.tif")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "C02.tif")
    Name to assign these images:Bodipy
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "C03.tif")
    Name to assign these images:CellTrackerRed
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['Rescale the three fluorescent images from 0 to 1.']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
    Select the input image:Hoechst
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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notes:['Rescale lipid image']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
    Select the input image:Bodipy
    Name the output image:Bodipy_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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notes:['Rescale cytoplasm stain image']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
    Select the input image:CellTrackerRed
    Name the output image:CellTrackerRed_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Find nuclei. The cells are differentiated from stem cells and can become fat cells (adipocytes) or more like fiborblasts. Fibroblasts nuceli are larger and rounder.', '', 'Robust segmentation is difficult for various reasons. The lipid vesicles either occlude the nuceli or, physically change their shape so that the nuclei are not round as in most cells. Sometimes the entire nucleus is also not visible within the confocal imaging plane. Nuclear intensity also varies. Finally, lipid droplets can work as lenses giving the nuclei a bubbly appearance. Here the original image is used.']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
    Select the input image:Hoechst
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:60
    Suppress local maxima that are closer than this minimum allowed distance:25
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:5
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.020,1
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    Size of adaptive window:67
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectSizeShape:[module_num:9|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notes:['Measure morphological (form) features.']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
    Select object sets to measure:nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:10|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notes:['Measure the intensity of the nuclear stain.']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
    Select images to measure:Hoechst
    Select objects to measure:nuclei

FilterObjects:[module_num:11|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notes:['Filter nuclei. At this point the fibroblast and adipose nuclei could be separated somewhat based on their shape and relationship to lipids, but that is not done in this case. Here, we just want to get rid of incorrectly identified nuclear objects, the apoptotic ones inparticular because they are intensely stained.']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
    Select the objects to filter:nuclei
    Name the output objects:Nuclei_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0
    Filter using a maximum measurement value?:Yes
    Maximum value:1
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Hoechst
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.04

ImageMath:[module_num:12|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notes:['Combine the images of the lipid and cytoplasmic stains to use for segmenting the cell bodies.']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:lipids_cytoplasm
    Image or measurement?:Image
    Select the first image:Bodipy
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CellTrackerRed
    Multiply the second image by:1.0
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
IdentifySecondaryObjects:[module_num:13|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notes:['Use the images from the previous steps, together with the nuclei, to identify the cell bodies (cytoplasm). Accurate segmentation of adipocyte cells is difficult and the cell boundaries as determined here are somewhat arbitrary. Here the weighting has been adjusted to create relatively compact objects.']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
    Select the input objects:Nuclei_filtered
    Name the objects to be identified:cell_bodies
    Select the method to identify the secondary objects:Propagation
    Select the input image:lipids_cytoplasm
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    Regularization factor:0.1
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.34
    Threshold correction factor:0.70
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:185
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    Thresholding method:Minimum Cross-Entropy

FilterObjects:[module_num:14|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notes:['Create a cellular population without edge objects.']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
    Select the objects to filter:cell_bodies
    Name the output objects:cells_no_edge
    Select the filtering mode:Image or mask border
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    Additional object count:1
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    Select additional object to relabel:Nuclei_filtered
    Name the relabeled objects:nuclei_no_edge

ExpandOrShrinkObjects:[module_num:15|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
    Select the input objects:cell_bodies
    Name the output objects:cell_bodies_shrink
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

ConvertObjectsToImage:[module_num:16|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
    Select the input objects:cell_bodies_shrink
    Name the output image:Cell_bodies_shrink
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:Cell_bodies_shrink
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:cell_bodies_shrink
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
GrayToColor:[module_num:18|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notes:['Create color overlay for showing cell boundaries.']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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:Bodipy
    Select the image to be colored green:CellTrackerRed
    Select the image to be colored blue:Hoechst
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:19|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notes:['Create overlay image of cell segmentation.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:Cells_no_edge_overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#00C400
    Select objects to display:nuclei_no_edge
    Select outline color:#FF8000
    Select objects to display:cells_no_edge

RescaleIntensity:[module_num:20|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notes:['Rescale to create output image.']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
    Select the input image:Cells_no_edge_overlay
    Name the output image:Cell_segmentation
    Rescaling method:Stretch each image to use the full intensity range
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
SaveImages:[module_num:21|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notes:['Save cellular segmentation image.']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
    Select the type of image to save:Image
    Select the image to save:Cell_segmentation
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cells
    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Desktop\\Hackathon\\Output
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:22|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notes:['Measure the shape of the cell bodies that are not bisected by the edge of the image.']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
    Select object sets to measure:cells_no_edge, nuclei_no_edge
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:23|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notes:['Measure the intensity of tyhe cells in the bodipy and CellTrackerRed channels (lipids and cytoplasm).']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
    Select images to measure:Bodipy, CellTrackerRed, Hoechst
    Select objects to measure:cells_no_edge, nuclei_no_edge

EnhanceOrSuppressFeatures:[module_num:24|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notes:['This is the start of the lipid droplet segmentation. CellProfiler has trouble with the large range of sizes. Large droplets and small droplets will be segmented separately. There are also a range of intensities and, the lipid droplets have defects that impair accurate segmentation.', '', 'Enhance small lipid droplets to improve segmentation fidelity.']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
    Select the input image:Bodipy
    Name the output image:Enhance_small_droplets
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
Smooth:[module_num:25|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notes:['Smooth the enhanced droplet image to get rid of the noise.']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
    Select the input image:Enhance_small_droplets
    Name the output image:Enhance_small_droplets_smoothed
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
RescaleIntensity:[module_num:26|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notes:['Rescale the result enhanced droplet image.']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
    Select the input image:Enhance_small_droplets_smoothed
    Name the output image:Enhance_small_droplet_smoothed_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
Smooth:[module_num:27|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notes:['Smooth the larger droplets to reduce over segmentation (object fragmentation). Over segmentation is also caused by droplet defects. These could be repaired, but it is complicated to do.']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
    Select the input image:Bodipy
    Name the output image:Large_droplets_smoothed
    Select smoothing method:Circular Average Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:10
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
RescaleIntensity:[module_num:28|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notes:['Rescale large droplet image.']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
    Select the input image:Large_droplets_smoothed
    Name the output image:Large_droplets_smoothed_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:29|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notes:['This is actually a threshold - but it does not create a binary image. It selects the larger brighter lipid droplets from the smoothed large droplet image. This will help to reduce droplet fragementation by smoothing only the large droplets.']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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:-0.4
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Large_droplets_smoothed_rescaled_thresholded
    Image or measurement?:Image
    Select the first image:Large_droplets_smoothed_rescaled
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:30|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notes:['Create new image with smoothed large and enhanced small droplets for segmentation.']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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Droplet_segmentation_image
    Image or measurement?:Image
    Select the first image:Bodipy_rescaled
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Enhance_small_droplet_smoothed_rescaled
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Large_droplets_smoothed_rescaled_thresholded
    Multiply the third image by:1.0
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
RescaleIntensity:[module_num:31|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notes:['Rescale the droplet segmentation image again.']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
    Select the input image:Droplet_segmentation_image
    Name the output image:Droplet_segmentation_image_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:32|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notes:['Identify the small lipid droplets. Standard methods available within CellProfiler are used, with reasonable success. A more complicated method using interval thresholding to identify seeds for secondary segmentation would likely perform better. This segmentation step over segments the larger droplets.']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
    Select the input image:Droplet_segmentation_image_rescaled
    Name the primary objects to be identified:lipid_droplets
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:3
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:3
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.05,1
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
IdentifyPrimaryObjects:[module_num:33|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notes:['Use the threshold large droplet image to segment the large lipid droplets separately. ']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
    Select the input image:Large_droplets_smoothed_rescaled_thresholded
    Name the primary objects to be identified:big_droplets
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:5
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.2,1.0
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
CombineObjects:[module_num:34|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notes:["Combine the large and small object populations. The larger objects will be merged with the smaller ones where there is overlap, removing much of the large droplet over-segmentation. It's not perfect though because of defects in the droplets (dents, creases, folds)."]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
    Select initial object set:big_droplets
    Select object set to combine:lipid_droplets
    Select how to handle overlapping objects:Merge
    Name the combined object set:Lipid_droplets_final_segmentation

OverlayOutlines:[module_num:35|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notes:['Create an overlay image showing the lipid segmentation.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Bodipy
    Name the output image:Lipid_droplet_overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Lipid_droplets_final_segmentation

RescaleIntensity:[module_num:36|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notes:['Rescale']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
    Select the input image:Lipid_droplet_overlay
    Name the output image:Lipid_droplet_overlay_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
SaveImages:[module_num:37|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notes:['Save the droplet overlay.']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
    Select the type of image to save:Image
    Select the image to save:Lipid_droplet_overlay_rescaled
    Select method for constructing file names:From image filename
    Select image name for file prefix:Bodipy
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_droplets
    Saved file format:jpeg
    Output file location:Default Output Folder|Desktop\\Hackathon\\Output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
FilterObjects:[module_num:38|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
    Select the objects to filter:Lipid_droplets_final_segmentation
    Name the output objects:Lipids_no_edge
    Select the filtering mode:Image or mask border
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    Additional object count:0
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
MeasureObjectSizeShape:[module_num:39|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notes:['Measure shape aspects of the dropletss.']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
    Select object sets to measure:Lipids_no_edge
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageIntensity:[module_num:40|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notes:['Measure the lipid droplet intensities at the inage level using the droplet segmentation as a mask.']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
    Select images to measure:Bodipy
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Lipids_no_edge
    Calculate custom percentiles:No
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
MeasureObjectIntensity:[module_num:41|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notes:['Measure the intensity of the lipid droplets at the object level.']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
    Select images to measure:Bodipy
    Select objects to measure:Lipids_no_edge

MeasureGranularity:[module_num:42|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notes:['This step applies a series of filters to the lipid (bodipy) image in order to measure how "granular" the lipid droplets are.']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
    Select images to measure:Bodipy
    Measure within objects?:No
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    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

EnhanceOrSuppressFeatures:[module_num:43|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notes:['This section attempts to quantify texture in the lipid droplets. The droplets have "defects" like holes, creases or folds. Detecting these features is quite hard to do because there are also dark areas between the droplets.', 'Enhance high frequency features.']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
    Select the input image:Bodipy_rescaled
    Name the output image:Enhance_speckles
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
RescaleIntensity:[module_num:44|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notes:['Rescale.']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
    Select the input image:Enhance_speckles
    Name the output image:Enhance_speckles_rescale
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:45|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notes:['Enhance the high-frequency bright features to create more contrast to the darker features.']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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Enhance_holes_step1
    Image or measurement?:Image
    Select the first image:Bodipy_rescaled
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Enhance_speckles_rescale
    Multiply the second image by:2.0
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
RescaleIntensity:[module_num:46|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notes:['Rescale.']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
    Select the input image:Enhance_holes_step1
    Name the output image:Enhance_holes_step1_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceOrSuppressFeatures:[module_num:47|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notes:['Enhance high frequency dark features.']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
    Select the input image:Enhance_holes_step1_rescaled
    Name the output image:Enhance_holes_step2
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:3,10
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
RescaleIntensity:[module_num:48|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notes:['Rescale.']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
    Select the input image:Enhance_holes_step2
    Name the output image:Enhance_holes_step2_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:49|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notes:['This step is used to suppress the dark area found between the droplets, as the holes in the droplets usually have higher intensity.']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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Droplet_defects
    Image or measurement?:Image
    Select the first image:Bodipy_rescaled
    Multiply the first image by:5.0
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    Image or measurement?:Image
    Select the second image:Enhance_holes_step2_rescaled
    Multiply the second image by:1.0
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
RescaleIntensity:[module_num:50|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notes:['Rescale....']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
    Select the input image:Droplet_defects
    Name the output image:Droplet_defects_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ExpandOrShrinkObjects:[module_num:51|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notes:['Erode the lipid droplet masks a little.']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
    Select the input objects:Lipid_droplets_final_segmentation
    Name the output objects:Lipid_droplets_final_segmentation_shrink
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

MaskImage:[module_num:52|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notes:['Mask the image with the defects using the eroded lipid droplet mask - this also helps to suppress "hole" signals between the droplets. Over segmentation of the lipid droplets creates problems here.']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
    Select the input image:Droplet_defects_rescaled
    Name the output image:Defect_image_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Lipid_droplets_final_segmentation_shrink
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    Invert the mask?:No

ImageMath:[module_num:53|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notes:['Threshold the resulting defect image to remove the suppressed signals.']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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:-0.3
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Defect_image_masked_thresholded
    Image or measurement?:Image
    Select the first image:Droplet_defects_rescaled
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
RescaleIntensity:[module_num:54|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notes:['Rescale.']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
    Select the input image:Defect_image_masked_thresholded
    Name the output image:Defect_image_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
MeasureObjectIntensity:[module_num:55|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notes:['Measure the intensity of the defects inside the droplets.']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
    Select images to measure:Defect_image_rescaled
    Select objects to measure:Lipids_no_edge

FilterObjects:[module_num:56|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notes:['Filter the droplets based on the intensity of the defect signals.']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
    Select the objects to filter:Lipids_no_edge
    Name the output objects:Defective_lipid_droplets
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Defect_image_rescaled
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:No
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
GrayToColor:[module_num:57|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notes:['Create an overlay showing the droplet defects.']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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:Bodipy_rescaled
    Select the image to be colored green:Defect_image_rescaled
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    Name the output image:Droplet_defect_color_overlay
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
ConvertObjectsToImage:[module_num:58|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
    Select the input objects:nuclei
    Name the output image:nuclei
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:59|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
    Select the input objects:cell_bodies
    Name the output image:Cytoplasm
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:60|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
    Select the input objects:Lipid_droplets_final_segmentation
    Name the output image:Lipid_final
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:61|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
    Select the input objects:Lipid_droplets_final_segmentation_shrink
    Name the output image:Lipid_final_shrink
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:62|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
    Select the type of image to save:Image
    Select the image to save:nuclei
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:nuclei
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:63|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
    Select the type of image to save:Image
    Select the image to save:Cytoplasm
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:cytoplasm
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:64|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
    Select the type of image to save:Image
    Select the image to save:Lipid_final
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Lipid_final
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:65|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notes:['Save defect overlay']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
    Select the type of image to save:Image
    Select the image to save:Lipid_final_shrink
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Lipid_final_shrink
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder|Desktop\\Hackathon\\Output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:66|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notes:['export measurement data to CSV file']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|Desktop\\Hackathon\\Output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:nuclei_no_edge|Intensity_MeanIntensity_Hoechst,nuclei_no_edge|Intensity_MeanIntensity_CellTrackerRed,nuclei_no_edge|Intensity_MeanIntensity_Bodipy,nuclei_no_edge|Intensity_IntegratedIntensity_Hoechst,nuclei_no_edge|Intensity_IntegratedIntensity_CellTrackerRed,nuclei_no_edge|Intensity_IntegratedIntensity_Bodipy,nuclei_no_edge|Intensity_StdIntensity_Hoechst,nuclei_no_edge|Intensity_StdIntensity_CellTrackerRed,nuclei_no_edge|Intensity_StdIntensity_Bodipy,nuclei_no_edge|Number_Object_Number,nuclei_no_edge|AreaShape_Compactness,nuclei_no_edge|AreaShape_Solidity,nuclei_no_edge|AreaShape_MeanRadius,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20x_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
